<?xml version='1.0'?>
<model name="Razumova_Fv" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <units name="millisecond">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="per_millisecond">
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <units name="micrometer">
        <unit prefix="micro" units="meter"/>
    </units>
    <units name="micrometer_per_millisecond">
        <unit prefix="micro" units="meter"/>
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <units name="joule_per_kelvin">
        <unit units="joule"/>
        <unit exponent="-1" units="kelvin"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="millisecond"/>
    </component>
    <component name="Aliev_Panfilov">
        <variable name="time" public_interface="in" units="millisecond"/>
        <variable initial_value="0" name="V_m" units="dimensionless"/>
        <variable initial_value="0" name="r" public_interface="out" units="dimensionless"/>
        <variable initial_value="0" name="I_HH" units="dimensionless"/>
        <!-- {init: 0.0, priv: out};-->
        <variable initial_value="128" name="k" units="dimensionless"/>
        <variable initial_value="0.15" name="a" units="dimensionless"/>
        <variable initial_value="0.002" name="e_0" units="dimensionless"/>
        <variable initial_value="0.2" name="m_1" units="dimensionless"/>
        <variable initial_value="0.3" name="m_2" units="dimensionless"/>
        <variable initial_value="99" name="stim" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>V_m</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <apply>
                                <minus/>
                                <ci>k</ci>
                            </apply>
                            <ci>V_m</ci>
                            <apply>
                                <minus/>
                                <ci>V_m</ci>
                                <ci>a</ci>
                            </apply>
                            <apply>
                                <minus/>
                                <ci>V_m</ci>
                                <cn cellml:units="dimensionless">1</cn>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>V_m</ci>
                            <ci>r</ci>
                        </apply>
                    </apply>
                    <ci>I_HH</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>r</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <ci>e_0</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>m_1</ci>
                                <ci>r</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>m_2</ci>
                                <ci>V_m</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>r</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k</ci>
                            <ci>V_m</ci>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <ci>V_m</ci>
                                    <ci>a</ci>
                                </apply>
                                <cn cellml:units="dimensionless">1</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!--ode(r, time) = 0{dimensionless};-->
    </component>
    <component name="Razumova">
        <variable name="time" public_interface="in" units="millisecond"/>
        <variable initial_value="3.8e-14" name="D" units="dimensionless"/>
        <variable initial_value="1e-14" name="A_1" units="dimensionless"/>
        <variable initial_value="3.4e-13" name="A_2" units="dimensionless"/>
        <variable initial_value="1e-16" name="x_1" units="micrometer"/>
        <variable initial_value="8e-3" name="x_2" units="micrometer"/>
        <variable initial_value="8e-3" name="x_0" units="micrometer"/>
        <variable initial_value="1" name="R_T" units="dimensionless"/>
        <variable name="R_off" units="dimensionless"/>
        <variable initial_value="3.4e-13" name="A_2_0" units="dimensionless"/>
        <!-- r is a meassure for the calcium concentration - import from Aliev-Panfilov Model-->
        <variable initial_value="0" name="r" public_interface="in" units="dimensionless"/>
        <variable initial_value="3.0722" name="r_0" units="dimensionless"/>
        <!-- Import fibre-stretch and velocity from Continuum-Mechanic Model-->
        <variable initial_value="1" name="l_hs" units="micrometer"/>
        <variable initial_value="0" name="rel_velo" units="micrometer_per_millisecond"/>
        <variable name="velo_scaled" units="micrometer_per_millisecond"/>
        <variable initial_value="7.815e-5" name="velo_max" units="dimensionless"/>
        <!-- Reaction Rates-->
        <variable name="k_on" units="per_millisecond"/>
        <variable name="k_off" units="per_millisecond"/>
        <variable name="f" units="per_millisecond"/>
        <variable name="f_prime" units="per_millisecond"/>
        <variable name="h" units="per_millisecond"/>
        <variable name="h_prime" units="per_millisecond"/>
        <variable name="g" units="per_millisecond"/>
        <variable name="g_prime" units="per_millisecond"/>
        <!-- Initial Reaction Rates (per millisecond)-->
        <variable initial_value="0" name="k_0_on" units="per_millisecond"/>
        <variable initial_value="100e-3" name="k_0_off" units="per_millisecond"/>
        <variable initial_value="120e-3" name="k_Ca_on" units="per_millisecond"/>
        <variable initial_value="50e-3" name="k_Ca_off" units="per_millisecond"/>
        <variable initial_value="4e-3" name="g_0" units="per_millisecond"/>
        <variable initial_value="50e-3" name="f_0" units="per_millisecond"/>
        <variable initial_value="8e-3" name="h_0" units="per_millisecond"/>
        <variable initial_value="400e-3" name="f_prime0" units="per_millisecond"/>
        <variable initial_value="6e-3" name="h_prime0" units="per_millisecond"/>
        <variable initial_value="3.5400e-13" name="g_prime0" units="per_millisecond"/>
        <!-- Model Parameters     -->
        <variable name="sigma" units="dimensionless"/>
        <variable name="lambda_A1" units="dimensionless"/>
        <variable name="lambda_A2" units="dimensionless"/>
        <variable initial_value="1" name="Ca_50" units="dimensionless"/>
        <!--var Ca_50: dimensionless {init: 0.5};-->
        <variable initial_value="3.2" name="nu" units="dimensionless"/>
        <!-- Energetic/Thermodynamic Model Contstraints-->
        <variable initial_value="9.1362e-20" name="E_ATP" units="joule"/>
        <variable initial_value="1.38e-23" name="kappa" units="joule_per_kelvin"/>
        <variable initial_value="310" name="T" units="kelvin"/>
        <!-- Active Stress Model-->
        <variable name="ActiveStress" units="dimensionless"/>
        <variable name="Activation" units="dimensionless"/>
        <variable name="f_l" units="dimensionless"/>
        <!--var A_2_max: dimensionless {init: 0.0769};-->
        <variable initial_value="0.0444557705319849" name="A_2_max" units="dimensionless"/>
        <!--0.0175313253125662};-->
        <!-- Dummy Equations (OpenCMISS Bug)-->
        <variable initial_value="0" name="Dummy_1" units="dimensionless"/>
        <variable initial_value="0" name="Dummy_2" units="dimensionless"/>
        <!-- Scaling Parameters Slow Twitch -->
        <!--var k_on_rel: dimensionless {init: 0.925};
var k_off_rel: dimensionless {init: 0.143};
var alpha: dimensionless {init: 1.35};-->
        <!-- Scaling Parameters Fast Twitch -->
        <!-- var k_on_rel: dimensionless {init: 0.19};
 var k_off_rel: dimensionless {init: 0.9};
 var alpha: dimensionless {init: 1.35};-->
        <!-- var F: dimensionless;
 var dummy: newton_millisecond_per_m2 {init: 0.0};-->
        <!-- Algebraic equations -->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>sigma</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <gt/>
                            <ci>x_2</ci>
                            <ci>x_0</ci>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dimensionless">8</cn>
                        <apply>
                            <lt/>
                            <ci>x_2</ci>
                            <ci>x_0</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>lambda_A1</ci>
                <apply>
                    <divide/>
                    <ci>A_1</ci>
                    <ci>R_T</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>lambda_A2</ci>
                <apply>
                    <divide/>
                    <ci>A_2</ci>
                    <ci>R_T</ci>
                </apply>
            </apply>
            <!-- Calculate Reaction Rates-->
            <apply>
                <eq/>
                <ci>k_on</ci>
                <apply>
                    <plus/>
                    <ci>k_0_on</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <apply>
                                <minus/>
                                <ci>k_Ca_on</ci>
                                <ci>k_0_on</ci>
                            </apply>
                            <ci>r</ci>
                            <ci>r_0</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>r</ci>
                                <ci>r_0</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>Ca_50</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <apply>
                                            <minus/>
                                            <cn cellml:units="dimensionless">1</cn>
                                            <ci>l_hs</ci>
                                        </apply>
                                        <cn cellml:units="dimensionless">8.3986</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k_off</ci>
                <apply>
                    <plus/>
                    <ci>k_0_off</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <apply>
                                <minus/>
                                <ci>k_Ca_off</ci>
                                <ci>k_0_off</ci>
                            </apply>
                            <ci>r</ci>
                            <ci>r_0</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>r</ci>
                                <ci>r_0</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>Ca_50</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <apply>
                                            <minus/>
                                            <cn cellml:units="dimensionless">1</cn>
                                            <ci>l_hs</ci>
                                        </apply>
                                        <cn cellml:units="dimensionless">8.3986</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Variable Dependent Rates
f = alpha*f_0*sqr(1{dimensionless}+lambda_A1*(exp(x_1/x_0*(nu-1{dimensionless}))-1{dimensionless})+lambda_A2*(exp(x_2/x_0*(nu-1{dimensionless}))-1{dimensionless}));
f_prime = alpha*f_prime0*exp(sigma*sqr(x_1));
h = alpha*h_0*exp(sigma*sqr(x_1));
h_prime = alpha*h_prime0*exp(sigma*sqr(x_2)-sigma*sqr(x_1));
g = alpha*g_0*exp(sigma*sqr(x_2-x_0));-->
            <!--Constant Rates-->
            <apply>
                <eq/>
                <ci>f</ci>
                <ci>f_0</ci>
            </apply>
            <apply>
                <eq/>
                <ci>f_prime</ci>
                <ci>f_prime0</ci>
            </apply>
            <apply>
                <eq/>
                <ci>h</ci>
                <ci>h_0</ci>
            </apply>
            <apply>
                <eq/>
                <ci>h_prime</ci>
                <ci>h_prime0</ci>
            </apply>
            <apply>
                <eq/>
                <ci>g</ci>
                <ci>g_0</ci>
            </apply>
            <apply>
                <eq/>
                <ci>g_prime</ci>
                <cn cellml:units="per_second">0</cn>
            </apply>
            <!--f*h*g/(f_prime*h_prime)*exp(-E_ATP/(kappa*T));-->
            <!-- Model ODEs and Conservation Law of State Occupation Numbers-->
            <apply>
                <eq/>
                <ci>R_off</ci>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>R_T</ci>
                            <ci>A_1</ci>
                        </apply>
                        <ci>A_2</ci>
                    </apply>
                    <ci>D</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>D</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_on</ci>
                            <ci>R_off</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>f_prime</ci>
                            <ci>A_1</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>g</ci>
                            <ci>A_2</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k_off</ci>
                            <ci>f</ci>
                            <ci>g_prime</ci>
                        </apply>
                        <ci>D</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>A_1</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>f</ci>
                            <ci>D</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>h_prime</ci>
                            <ci>A_2</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>f_prime</ci>
                            <ci>h</ci>
                        </apply>
                        <ci>A_1</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>A_2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>h</ci>
                            <ci>A_1</ci>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <ci>h_prime</ci>
                                <ci>g</ci>
                            </apply>
                            <ci>A_2</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>g_prime</ci>
                        <ci>D</ci>
                    </apply>
                </apply>
            </apply>
            <!-- To simulate without Force-Velocity Relation
ode(x_1, time) = -f*D/A_1*x_1-h_prime*A_2/A_1*x_1+0{dimensionless};
ode(x_2, time) = -h*A_1/A_2*(x_2-x_0)+0{dimensionless};-->
            <!--rel_velo = sel
    case time > 3000{millisecond}:
        0.2{micrometer_per_millisecond};
    otherwise:
        0.0{micrometer_per_millisecond};
endsel;-->
            <apply>
                <eq/>
                <ci>velo_scaled</ci>
                <apply>
                    <times/>
                    <ci>rel_velo</ci>
                    <ci>velo_max</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>x_1</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <apply>
                                        <minus/>
                                        <ci>f</ci>
                                    </apply>
                                    <ci>D</ci>
                                </apply>
                                <ci>A_1</ci>
                            </apply>
                            <ci>x_1</ci>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <ci>h_prime</ci>
                                    <ci>A_2</ci>
                                </apply>
                                <ci>A_1</ci>
                            </apply>
                            <ci>x_1</ci>
                        </apply>
                    </apply>
                    <ci>velo_scaled</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>x_2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <minus/>
                                    <ci>h</ci>
                                </apply>
                                <ci>A_1</ci>
                            </apply>
                            <ci>A_2</ci>
                        </apply>
                        <apply>
                            <minus/>
                            <ci>x_2</ci>
                            <ci>x_0</ci>
                        </apply>
                    </apply>
                    <ci>velo_scaled</ci>
                </apply>
            </apply>
            <!-- Active Stress and Activation-->
            <apply>
                <eq/>
                <ci>Activation</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>A_2</ci>
                        <ci>A_2_0</ci>
                    </apply>
                    <ci>A_2_max</ci>
                </apply>
            </apply>
            <!--f_l = 1{dimensionless};-->
            <apply>
                <eq/>
                <ci>f_l</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="dimensionless">0.0</cn>
                        <apply>
                            <lt/>
                            <ci>l_hs</ci>
                            <cn cellml:units="dimensionless">0.635</cn>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">4.2</cn>
                            <apply>
                                <minus/>
                                <ci>l_hs</ci>
                                <cn cellml:units="dimensionless">0.635</cn>
                            </apply>
                        </apply>
                        <apply>
                            <lt/>
                            <ci>l_hs</ci>
                            <cn cellml:units="dimensionless">0.835</cn>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">0.84</cn>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">0.9697</cn>
                                <apply>
                                    <minus/>
                                    <ci>l_hs</ci>
                                    <cn cellml:units="dimensionless">0.835</cn>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <lt/>
                            <ci>l_hs</ci>
                            <cn cellml:units="dimensionless">1.0</cn>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <lt/>
                            <ci>l_hs</ci>
                            <cn cellml:units="dimensionless">1.125</cn>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">1.4286</cn>
                                <apply>
                                    <minus/>
                                    <ci>l_hs</ci>
                                    <cn cellml:units="dimensionless">1.125</cn>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <lt/>
                            <ci>l_hs</ci>
                            <cn cellml:units="dimensionless">1.825</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">0.0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>ActiveStress</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">1.125</cn>
                            <apply>
                                <minus/>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <times/>
                                        <ci>A_2</ci>
                                        <ci>x_2</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>A_1</ci>
                                        <ci>x_1</ci>
                                    </apply>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>A_2_0</ci>
                                    <ci>x_0</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>A_2_max</ci>
                            <ci>x_0</ci>
                        </apply>
                    </apply>
                    <ci>f_l</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Dummy_1</ci>
                </apply>
                <ci>ActiveStress</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Dummy_2</ci>
                </apply>
                <ci>Activation</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="Aliev_Panfilov" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="Razumova" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="Razumova" component_2="Aliev_Panfilov"/>
        <map_variables variable_1="r" variable_2="r"/>
    </connection>
</model>
